WorkflowBuilder(Version=2.7.0)
ExternalizedMapping("change settings")
-> GroupWorkflow "Intialization params"
    SubscribeSubject "Set Level" => #0
    -> PropertyMapping(Value) => #1
    #1, #0 -> IntProperty(Value=0)
    -> BehaviorSubject Level

    SubscribeSubject "Set Difficulty" => #4
    -> PropertyMapping(Value) => #5
    #5, #4 -> DoubleProperty(Value=0.5)
    -> BehaviorSubject Difficulty

    SubscribeSubject "Set Time between" => #8
    -> PropertyMapping(Value) => #9
    #9, #8 -> DoubleProperty(Value=3)
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> BehaviorSubject "Time between"

    SubscribeSubject "Set Time Out" => #13
    -> PropertyMapping(Value) => #14
    #14, #13 -> DoubleProperty(Value=6)
    -> BehaviorSubject "Time Out"

    SubscribeSubject "Set reward time" => #17
    -> PropertyMapping(Value) => #18
    #18, #17 -> DoubleProperty(Value=2)
    -> BehaviorSubject "reward time"

    GroupWorkflow Defult
        IntProperty(Value=0)
        -> BehaviorSubject "Set Level"

        DoubleProperty(Value=1)
        -> BehaviorSubject "Set Difficulty"

        DoubleProperty(Value=3)
        -> BehaviorSubject "Set Time between"

        DoubleProperty(Value=3)
        -> BehaviorSubject "Set Time Out"

        DoubleProperty(Value=2)
        -> BehaviorSubject "Set reward time"

    ExternalizedMapping(Value(DisplayName=Level)) => #22
    ExternalizedMapping(Value(DisplayName=Difficulty)) => #23
    ExternalizedMapping(Value(DisplayName="Time Between")) => #24
    ExternalizedMapping(Value(DisplayName=TimeOut)) => #25
    ExternalizedMapping(Value(DisplayName="reward Time")) => #26
    ExternalizedMapping(Filter(DisplayName="change settings"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #28
    #22, #28 -> IntProperty(Value=0)
    -> MulticastSubject "Set Level"
    #23, #28 -> DoubleProperty(Value=0.5)
    -> MulticastSubject "Set Difficulty"
    #24, #28 -> DoubleProperty(Value=3)
    -> MulticastSubject "Set Time between"
    #25, #28 -> DoubleProperty(Value=6)
    -> MulticastSubject "Set Time Out"
    #26, #28 -> DoubleProperty(Value=2)
    -> MulticastSubject "Set reward time"

ExternalizedMapping("Animal ID")
-> GroupWorkflow Files
    ExternalizedMapping(Value(DisplayName="Animal ID")) => #0
    ExternalizedMapping(Value(DisplayName=Path)) => #1
    Bonsai.Windows.Input.KeyDown(Filter=F10, SuppressRepetitions=false) => #2
    #0, #2 -> StringProperty(Value=FVB103)
    -> BehaviorSubject Animal => #4
    #1, #2 -> PropertySource<Bonsai.IO.EnumerateDirectories,System.String>(MemberName=Path, Value=E:\Ben\Dis) => #5
    #2 -> StringProperty(Value=\) => #6
    #2 -> StringProperty(Value=\events) => #7
    #5, #6, #4, #7 -> Zip
    -> Add
    -> BehaviorSubject path
    #5 -> PropertyMapping(Path) => #11
    SubscribeSubject Animal
    -> PropertyMapping(SearchPattern) => #13
    #11, #13 -> GroupWorkflow "Initialize files"
        ExternalizedMapping(Path, SearchPattern)
        -> Bonsai.IO.EnumerateDirectories(Path=E:\Ben\Dis, SearchPattern=FVB103, SearchOption=TopDirectoryOnly)
        -> IsEmpty => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BehaviorSubject "initilaize new exp"
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BehaviorSubject "Continue with animal"

        SubscribeSubject "initilaize new exp"
        -> StringProperty(Value="New experiment created")
        -> Delay(DueTime=PT4S) => #9
        SubscribeSubject "start session" => #10
        #9, #10 -> SubscribeWhen
        -> BehaviorSubject init
        -> BehaviorSubject Events
        -> MulticastSubject "User notifications"
        -> Sink
            WorkflowInput Source1
            -> Delay(DueTime=PT0.5S)
            -> StringProperty(Value="press F12 to start")
            -> MulticastSubject "User notifications"
            -> WorkflowOutput
        SubscribeSubject "Continue with animal" => #16
        SubscribeSubject path => #17
        Timer(DueTime=PT0.5S, Period=PT0S) => #18
        StringProperty(Value=_Settings.csv) => #19
        #17, #19 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #22
        #22, #18 -> Bonsai.IO.CsvReader(FileName=E:\Ben\Dis\FVB103\events_Settings.csv, ListSeparator=",", ScanPattern="", SkipRows=0)
        -> Disable Last => #24
        #24, #16 -> SubscribeWhen => #25
        #25, #10 -> SubscribeWhen
        -> BehaviorSubject params
        -> Sink
            WorkflowInput Source1
            -> StringProperty(Value="Loaded ") => #1
            SubscribeSubject Animal => #2
            #1, #2 -> Zip
            -> Add
            -> MulticastSubject "User notifications"
            -> Sink
                WorkflowInput Source1
                -> StringProperty(Value="Press F12 to start")
                -> MulticastSubject "User notifications"
                -> WorkflowOutput
            -> WorkflowOutput
        -> GroupWorkflow "loaded settings"(Description="Loads the last settings from an animal")
            WorkflowInput Source1 => #0
            -> Index(Operand=IntProperty(Value=0))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set reward time"
            #0 -> Index(Operand=IntProperty(Value=1))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Time Out"
            #0 -> Index(Operand=IntProperty(Value=2))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Time between"
            #0 -> Index(Operand=IntProperty(Value=3))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Difficulty"
            #0 -> Index(Operand=IntProperty(Value=4))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Level"

        StringProperty(Value=" ...") => #30
        SubscribeSubject Animal => #31
        SubscribeSubject loadExp
        -> StringProperty(Value="Loading animal ") => #33
        #33, #31, #30 -> Zip
        -> Add
        -> BehaviorSubject "User notifications"

GroupWorkflow "Inputs outputs"
    ExternalizedMapping(Value(DisplayName=PortName))
    -> PropertySource<Bonsai.Arduino.AnalogInput,System.String>(MemberName=PortName, Value=COM9) => #1
    -> PropertyMapping(PortName) => #2
    ExternalizedMapping("Aluminum pin", "Catch pin", "Motor pin", "NO pin", "Attanuated pin", "Water reward pin", "tme for water") => #3
    ExternalizedMapping("Report lick", "R_alum pin", "R_att pin", "R_non pin", "R_Mot pin", "R_Ctch pin") => #4
    #2, #4 -> GroupWorkflow Inputs
        ExternalizedMapping(Pin(DisplayName="Report lick")) => #0
        ExternalizedMapping(Value(DisplayName=PortName))
        -> PropertySource<Bonsai.Arduino.AnalogInput,System.String>(MemberName=PortName, Value=COM9) => #2
        -> PropertyMapping(PortName) => #3
        #3, #0 -> GroupWorkflow "Lickport report"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.AnalogInput(PortName=COM9, Pin=9)
            -> GreaterThan(Operand=IntProperty(Value=380))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PublishSubject licked
            -> WorkflowOutput
        -> StringProperty(Value=Lick)
        -> BehaviorSubject "lick report"
        #2 -> PropertyMapping(PortName) => #7
        ExternalizedMapping(Pin(DisplayName="R_alum pin")) => #8
        #7, #8 -> GroupWorkflow "report alum"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=0)
            -> WorkflowOutput
        #2 -> PropertyMapping(PortName) => #10
        ExternalizedMapping(Pin(DisplayName="R_att pin")) => #11
        #10, #11 -> GroupWorkflow "report attenuated"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=0)
            -> WorkflowOutput
        #2 -> PropertyMapping(PortName) => #13
        ExternalizedMapping(Pin(DisplayName="R_non pin")) => #14
        #13, #14 -> GroupWorkflow "report no Object"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=0)
            -> WorkflowOutput
        #2 -> PropertyMapping(PortName) => #16
        ExternalizedMapping(Pin(DisplayName="R_Mot pin")) => #17
        #16, #17 -> GroupWorkflow "Report finished M"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=0)
            -> WorkflowOutput
        #2 -> PropertyMapping(PortName) => #19
        ExternalizedMapping(Pin(DisplayName="R_Ctch pin")) => #20
        #19, #20 -> GroupWorkflow "Report catch movement"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=0)
            -> WorkflowOutput
    #1 -> PropertyMapping(PortName) => #6
    #6, #3 -> GroupWorkflow Outputs
        ExternalizedMapping(Value(DisplayName=PortName))
        -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #1
        -> PropertyMapping(PortName) => #2
        ExternalizedMapping(Pin(DisplayName="Aluminum pin")) => #3
        #2, #3 -> GroupWorkflow Aluminum
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, Pin) => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control.bonsai", PortName=COM9, Pin=4)
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #5
        ExternalizedMapping(Pin(DisplayName="Catch pin")) => #6
        ExternalizedMapping(Pin(DisplayName="Motor pin")) => #7
        ExternalizedMapping(Pin(DisplayName="NO pin")) => #8
        ExternalizedMapping(Pin(DisplayName="Attanuated pin")) => #9
        #5, #9 -> GroupWorkflow Attanuated
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, Pin) => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control.bonsai", PortName=COM9, Pin=4)
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #11
        #11, #8 -> GroupWorkflow "No object"
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, Pin) => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control.bonsai", PortName=COM9, Pin=4)
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #13
        #13, #7 -> GroupWorkflow "Motor move"
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, Pin) => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control.bonsai", PortName=COM9, Pin=4)
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #15
        #15, #6 -> GroupWorkflow "Catch trial"
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, Pin) => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control.bonsai", PortName=COM9, Pin=4)
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #17
        ExternalizedMapping(Pin(DisplayName="Water reward pin"), DueTime(DisplayName="tme for water")) => #18
        #17, #18 -> GroupWorkflow "Water reward"
            ExternalizedMapping(PortName, Pin, DueTime) => #0
            SubscribeSubject "give water" => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control with timing.bonsai", PortName=COM9, Pin=4, DueTime=PT0.52S)
            -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false)
-> Sink "Events notification"
    WorkflowInput Source1
    -> StringProperty(Value="Experiment paused")
    -> MulticastSubject "User notifications"
    -> Sink "2nd notification"
        WorkflowInput Source1
        -> Delay(DueTime=PT1S)
        -> StringProperty(Value="Changed settings")
        -> MulticastSubject "User notifications"
        -> Sink
            WorkflowInput Source1
            -> Delay(DueTime=PT0.5S)
            -> StringProperty(Value="press F12 to start")
            -> MulticastSubject "User notifications"
            -> WorkflowOutput
        -> WorkflowOutput
    -> WorkflowOutput

GroupWorkflow Save
    GroupWorkflow "Save to file" => #0
        SubscribeSubject path => #0
        SubscribeSubject Events
        -> Timestamp => #2
        SubscribeSubject Level => #3
        SubscribeSubject Difficulty => #4
        SubscribeSubject "Time between"
        -> Divide(Operand=DoubleProperty(Value=10000000)) => #6
        SubscribeSubject "Time Out" => #7
        SubscribeSubject "reward time" => #8
        #8, #7, #6, #4, #3 -> Zip
        -> BehaviorSubject "settings new" => #10
        #2, #10 -> WithLatestFrom => #11
        SubscribeSubject "Exp. type"
        -> Skip(Count=1) => #13
        SubscribeSubject "initilaize new exp"
        -> IntProperty(Value=999) => #15
        #13, #15 -> Merge => #16
        #11, #16 -> Zip
        -> BehaviorSubject lastSettings => #18
        StringProperty(Value=.csv) => #19
        #0, #19 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #22
        #22, #18 -> Bonsai.IO.CsvWriter(FileName=E:\Ben\Dis\FVB103\events.csv, Delimiter=",", ListSeparator="", Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput

        SubscribeSubject "settings new"
        -> DistinctUntilChanged
        -> SelectMany
            WorkflowInput Source1 => #0
            SubscribeSubject "Settings filename"
            -> PropertyMapping(FileName) => #2
            #0, #2 -> Bonsai.IO.CsvWriter(FileName=E:\Ben\Dis\FVB103\events_Settings.csv, Delimiter=",", ListSeparator="", Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
            -> WorkflowOutput

        SubscribeSubject path => #28
        StringProperty(Value=_Settings.csv) => #29
        #28, #29 -> Zip
        -> Add
        -> ReplaySubject "Settings filename"(BufferSize=nil)

        SubscribeSubject "lick report"
        -> Timestamp => #34
        SubscribeSubject path => #35
        StringProperty(Value=_licks.csv) => #36
        #35, #36 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #39
        #39, #34 -> Bonsai.IO.CsvWriter(FileName=E:\Ben\Dis\FVB103\events_licks.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)
    SubscribeSubject params
    -> Delay(DueTime=PT5S)
    -> BooleanProperty(Value=false) => #3
    SubscribeSubject init
    -> BooleanProperty(Value=false) => #5
    #3, #5 -> Merge => #6
    #0, #6 -> SubscribeWhen
    -> WorkflowOutput

ExternalizedMapping("Start session")
-> GroupWorkflow "Main training"
    SubscribeSubject Level => #0
    ExternalizedMapping(Filter(DisplayName="Start session"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false)
    -> SelectMany => #3
        WorkflowInput Source1
        -> StringProperty(Value="Starting session animal ") => #1
        SubscribeSubject Animal => #2
        #1, #2 -> Zip
        -> Add
        -> MulticastSubject "User notifications"
        -> WorkflowOutput
    #0, #3 -> Sample => #4
    -> Equal(Operand=IntProperty(Value=0))
    -> GroupWorkflow "Level 0 - Lick"
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany
            ImmediateScheduler
            -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
            SubscribeSubject Difficulty
            -> PropertyMapping(P) => #3
            #1, #3 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0.5, N=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> MulticastSubject "Exp. type"
            -> Equal(Operand=IntProperty(Value=1)) => #7
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="Trial: Reward always")
            -> MulticastSubject Events
            -> Delay(DueTime=PT0.5S)
            -> SelectMany => #12
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject "give water"
                -> StringProperty(Value="Water no lick")
                -> MulticastSubject Events
                -> WorkflowOutput
            #7 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value="Trial: Reward for lick")
            -> MulticastSubject Events => #15
            SubscribeSubject "reward time"
            -> Multiply(Operand=DoubleProperty(Value=10000000))
            -> PropertyMapping(DueTime) => #18
            #15, #18 -> SelectMany => #19
                ExternalizedMapping(DueTime)
                -> Timer(DueTime=PT2S, Period=PT0S)
                -> StringProperty(Value="Reward timed out")
                -> MulticastSubject Events => #3
                SubscribeSubject licked
                -> Take(Count=1)
                -> MulticastSubject "give water"
                -> StringProperty(Value=Reward)
                -> MulticastSubject Events => #8
                #3, #8 -> Amb
                -> WorkflowOutput
            #12, #19 -> Merge => #20
            SubscribeSubject "Time between"
            -> PropertyMapping(DueTime) => #22
            #20, #22 -> Delay(DueTime=PT3S)
            -> Repeat => #24
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #25
            #24, #25 -> TakeUntil
    #4 -> Equal(Operand=IntProperty(Value=1))
    -> GroupWorkflow "Level 1 - Motor"
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany "Motor movement only"
            Disable SubscribeSubject Difficulty
            -> Disable PropertyMapping(P) => #1
            Disable SubscribeSubject "Time between"
            -> Disable Add(Operand=DoubleProperty(Value=40000000)) => #3
            -> Disable PropertyMapping(Period)
            -> Disable Timer(DueTime=PT0S, Period=PT7S)
            -> Disable SelectMany "Motor back" => #6
                WorkflowInput Source1
                -> StringProperty(Value="Motor move back")
                -> MulticastSubject Events
                -> Delay(DueTime=PT2S)
                -> StringProperty(Value="Motor at position")
                -> MulticastSubject Events
                -> WorkflowOutput
            Disable Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #7
            #6, #7 -> Disable TakeUntil
            -> Disable SelectMany "Motor forward" => #9
                WorkflowInput Source1
                -> StringProperty(Value="Motor move forward")
                -> MulticastSubject Events
                -> Delay(DueTime=PT2S)
                -> StringProperty(Value="Motor at position")
                -> MulticastSubject Events
                -> WorkflowOutput
            #9, #1 -> Disable SelectMany "Lick reward Level 1" => #10
                ExternalizedMapping(P) => #0
                Bonsai.Numerics.CreateRandom(Seed=nil) => #1
                #1, #0 -> Bonsai.Numerics.Distributions.CreateBinomial(P=1, N=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> MulticastSubject "Exp. type"
                -> Equal(Operand=IntProperty(Value=1)) => #5
                -> Condition "Give always"
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany => #7
                    WorkflowInput Source1
                    -> StringProperty(Value="Reward no lick")
                    -> WorkflowOutput
                #5 -> Condition "wait for lick" => #8
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> SelectMany => #9
                    SubscribeSubject licked
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value=Reward_licked)
                    -> BehaviorSubject lickk
                    -> WorkflowOutput
                #8 -> StringProperty(Value="no lick") => #10
                #7, #9, #10 -> Merge
                -> WorkflowOutput
            #3 -> Disable PropertyMapping(Interval) => #11
            #10, #11 -> Disable SampleInterval(Interval=PT7S)
            -> Disable MulticastSubject Events

            WorkflowInput Source1
            -> Delay(DueTime=PT1S)
            -> SelectMany "Motor back"
                WorkflowInput Source1
                -> StringProperty(Value="Motor move back")
                -> MulticastSubject Events
                -> Delay(DueTime=PT2S)
                -> StringProperty(Value="Motor at position")
                -> MulticastSubject Events
                -> WorkflowOutput
            -> Delay(DueTime=PT1S)
            -> SelectMany "Motor forward" => #18
                WorkflowInput Source1
                -> StringProperty(Value="Motor move forward")
                -> MulticastSubject Events
                -> Delay(DueTime=PT2S)
                -> StringProperty(Value="Motor at position")
                -> MulticastSubject Events
                -> WorkflowOutput
            Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #19
            SubscribeSubject Difficulty
            -> PropertyMapping(P) => #21
            SubscribeSubject "Time between"
            -> PropertyMapping(Period, DueTime) => #23
            #18, #21, #23 -> SelectMany "Lick reward Level 0"
                ExternalizedMapping(P) => #0
                ExternalizedMapping(Period)
                -> Timer(DueTime=PT2S, Period=PT3S)
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #3
                #3, #0 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0.3, N=1)
                -> Bonsai.Numerics.Distributions.Sample => #5
                -> MulticastSubject "Exp. type"
                -> Equal(Operand=IntProperty(Value=1)) => #7
                -> Condition "Give always"
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany => #9
                    WorkflowInput Source1
                    -> StringProperty(Value="Reward no lick")
                    -> WorkflowOutput
                #7 -> Condition "wait for lick" => #10
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                Bonsai.Windows.Input.KeyDown(Filter=F1, SuppressRepetitions=false) => #11
                ExternalizedMapping(DueTime) => #12
                #10, #12 -> SelectMany => #13
                    SubscribeSubject licked
                    -> DistinctUntilChanged => #1
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> StringProperty(Value="Reward licked") => #3
                    #1 -> Condition => #4
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    ExternalizedMapping(DueTime) => #5
                    #4, #5 -> Delay(DueTime=PT3S)
                    -> StringProperty(Value="no lick") => #7
                    #3, #7 -> Merge
                    -> Take(Count=1) => #9
                    Source2=#9 -> WorkflowOutput
                #9, #13 -> Merge => #14
                #14, #11 -> TakeUntil
                -> MulticastSubject Events
                -> WorkflowOutput
                #5 -> GroupWorkflow timestamps
                    WorkflowInput Source1
                    -> Timestamp => #1
                    -> MemberSelector(Selector=Timestamp.DateTime.Minute) => #2
                    #1 -> MemberSelector(Selector=Timestamp.DateTime.Second) => #3
                    #2, #3 -> Zip
                    -> WorkflowOutput
            -> Repeat => #25
            #25, #19 -> TakeUntil
        -> WorkflowOutput
    #4 -> BehaviorSubject "Exp. type"

ExternalizedMapping("Load Animal")
-> GroupWorkflow "Load animal to session"
    ExternalizedMapping(Filter(DisplayName="Load Animal"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F10, SuppressRepetitions=false)
    -> BehaviorSubject loadExp
    -> Delay(DueTime=PT0.5S)
    -> BehaviorSubject "start session"
    -> WorkflowOutput

SubscribeSubject Events
SubscribeSubject "User notifications"

GroupWorkflow "Manual control"
    ExternalizedMapping(Filter(DisplayName="Give water"))
    -> Bonsai.Windows.Input.KeyDown(Filter=W, SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> PublishSubject "give water"

    ExternalizedMapping(Filter(DisplayName="Go to Alum"))
    -> Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> PublishSubject Aluminum

    ExternalizedMapping(Filter(DisplayName="Go to Attenuated"))
    -> Bonsai.Windows.Input.KeyDown(Filter=M, SuppressRepetitions=false)
    -> PublishSubject Attenuated

    ExternalizedMapping(Filter(DisplayName="Go to no Object"))
    -> Bonsai.Windows.Input.KeyDown(Filter=N, SuppressRepetitions=false)
    -> PublishSubject "No Object"

    ExternalizedMapping(Filter(DisplayName="Move motor"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F, SuppressRepetitions=false)
    -> PublishSubject "Move motor"

    ExternalizedMapping(Filter(DisplayName="Move catch"))
    -> Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
    -> PublishSubject "give water"
